PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = Depth of Processing
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = cm
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    TextComponent word_text
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent question_text
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $question
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    KeyboardComponent key_resp_encoding
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Test
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    TextComponent text_word
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $test_word
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    TextComponent recognition_reg
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text = Is this a word you saw earlier in this experiment?
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    KeyboardComponent key_resp_recog
      allowedKeys = 'y','n'
      correctAns = $Corr_Ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Instructions_1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a series of words on the screen. For each word, a question will appear below it. Answer the question by pressing Y for ‘Yes’ or N for ‘No’. Try to answer as quickly and accurately as possible. There is no time limit for this part, so focus on each word carefully.
        A fixation cross (‘+’) will appear briefly before each word to help you focus.
        Press space bar to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, you will see a series of words again. Some of these words you saw earlier, and some are new.
        For each word, decide if you have seen it before in this experiment. Press Y for ‘Yes’ (you saw it before) or N for ‘No’ (you did not see it). Respond as quickly and accurately as possible. Each word will only be shown briefly.
        A fixation cross (‘+’) will appear briefly before each word to help you focus.
        Press space bar to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions_1
  LoopInitiator encoding loopType="TrialHandler"
    conditionsFile = Encoding Conditions_ Depth _of_processing and_memory_retention.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'table', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'moon', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'CHAIR', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'leaf', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'book', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'train', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'LAMP', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'dog', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'BRIDGE', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'shoe', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'BAG', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'phone', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'cloud', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'cup', 'question': 'Does this end with a vowel?', 'level_of_processing': 'shallow'},
      {'word': 'STONE', 'question': 'Is this word in uppercase?', 'level_of_processing': 'shallow'},
      {'word': 'apple', 'question': 'Do you know what this word means?', 'level_of_processing': 'deep'}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
    Routine trial
  LoopTerminator encoding
  Routine Instructions_2
  LoopInitiator regognition_test loopType="TrialHandler"
    conditionsFile = Test phase Conditions_ Depth _of_processing and_memory_retention.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'table', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'moon', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'chair', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'leaf', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'book', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'train', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'lamp', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'dog', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'bridge', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'shoe', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'bag', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'phone', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'cloud', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'cup', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'stone', 'old_new': 'old ', 'processing_type': 'shallow', 'Corr_Ans': 'y'},
      {'test_word': 'apple', 'old_new': 'old ', 'processing_type': 'deep', 'Corr_Ans': 'y'},
      {'test_word': 'mountain', 'old_new': 'old ', 'processing_type': 'deep', 'Corr_Ans': 'y'}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
    Routine Test
  LoopTerminator regognition_test
