PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [600, 400]
  expName = Stroop task_0.1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent Stimulus
      color [set every repeat] = $Color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $Correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome. You are required to Press 'r' key if the color of the text is red, and 'b' key if the color of the text is blue. Press 'SPACE' to start
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = Thankyou for taking part in the experiment.
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop task variables cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Word': 'RED', 'Color': 'red', 'Stim_Condition': 'C', 'Correct_res': 'r'},
      {'Word': 'RED', 'Color': 'blue', 'Stim_Condition': 'I', 'Correct_res': 'b'},
      {'Word': 'BLUE', 'Color': 'red', 'Stim_Condition': 'I', 'Correct_res': 'r'},
      {'Word': 'BLUE ', 'Color': 'blue', 'Stim_Condition': 'C', 'Correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine Thankyou
